// Archivo de descripción de la barra de herramientas: MedUTN_Toolbar
run("Action Bar", "/plugins/ActionBar/MedUTN_Toolbar.txt");
exit;

<line>
<button> 1 line 1
label=Abrir Muestra
arg=<macro>
run("Blobs (25K)");  // Plugin para abrir una imagen de muestra de blobs
</macro>
<button> 2 line 1
label=Desenfoque Gaussiano
arg=<macro>
run("Gaussian Blur...", "sigma=5");  // Aplica desenfoque gaussiano con sigma=5
</macro>
style="background-color: #4A90E2; color: white; border-radius: 5px; padding: 10px; margin: 10px;"
<button> 3 line 1
label=Detectar Bordes
arg=<macro>
run("Enhance Contrast", "saturated=0.35");
run("Gaussian Blur...", "sigma=2");
run("Find Edges");  // Plugin para detectar bordes en la imagen
</macro>
<button> 4 line 1
label=Umbral
arg=<macro>
run("Threshold...", "lower=128 upper=255");  // Aplica un umbral a la imagen
</macro>
<button> 5 line 1
label=Visor 3D
arg=<macro>
run("3D Viewer");  // Carga un visor 3D para reconstrucción de imágenes en tres dimensiones.
</macro>
<button> 6 line 1
label=Graficar Perfil
arg=<macro>
run("Plot Profile");  // Traza un gráfico del perfil de intensidad a lo largo de una línea en la imagen
</macro>
<button> 8 line 3
label=Ayuda
arg=<macro>
run("Open...", "path=C:/Users/Soporte/Desktop/Fiji.app/manualMedUTNToolbar/MedUTN_Toolbar_Manual_Usuario.pdf");  // Cambia la ruta por la ubicación del archivo
</macro>
style="background-color: #4A90E2; color: white; border-radius: 5px; padding: 10px; margin: 5px; font-size: 14px;"
</button>
</line>

<line>
<button> 1 line 2
label=Segmentacion Watershed
arg=<macro>
run("Watershed");  // Aplica el algoritmo de Watershed
</macro>
<button> 2 line 2
label=Invertir Colores
arg=<macro>
run("Invert");  // Invierte los colores de la imagen
</macro>
<button> 3 line 2
label=Medir
arg=<macro>
run("Measure");  // Mide áreas, perímetros, etc.
</macro>
<button> 4 line 2
label=Analizar Particulas
arg=<macro>
run("Threshold...", "lower=128 upper=255");
run("Analyze Particles...", "size=100-Infinity show=Masks");  // Analiza las partículas en la imagen
</macro>
<button> 5 line 2
label=Umbral Automatico (Otsu)
arg=<macro>
run("Auto Threshold", "method=Otsu white"); // Utiliza la segmentación automática por el método de Otsu
</macro>
<button> 6 line 2
label=Filtrar Mediana
arg=<macro>
run("Median...", "radius=2");  // Aplica un filtro de mediana con un radio de 2
</macro>
<button> 7 line 2
label=Deshacer Ultimo Cambio
arg=<macro>
run("Undo");  // Deshace el último cambio aplicado a la imagen
</macro>
</line>

<line>
// Nuevas funcionalidades agregadas

<button> 1 line 3
label=Abrir Imagen (Bio-Formats)
arg=<macro>
run("Bio-Formats Importer");  // Usa el plugin Bio-Formats para abrir diversos formatos de imágenes
</macro>
<button> 2 line 3
label=Calibrar Imagen
arg=<macro>
run("Set Scale...");  // Permite calibrar una imagen
</macro>
<button> 3 line 3
label=Segmentar Imagen
arg=<macro>
run("Make Binary");  // Convierte la imagen en binaria
</macro>
<button> 4 line 3
label=Proyeccion Z
arg=<macro>
run("Z Project...");  // Realiza una proyección Z de la imagen
</macro>
<button> 5 line 3
label=Histograma
arg=<macro>
run("Histogram");  // Muestra el histograma de la imagen
</macro>
<button> 6 line 3
label=Separar Canales
arg=<macro>
run("Split Channels");  // Separa los canales de color
</macro>
<button> 7 line 3
label=Mezclar Canales
arg=<macro>
run("Merge Channels...");  // Mezcla canales de color
</macro>
</line>

// fin del archivo
